PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo Lab Project Bhumika Bajaj AU2320057 PSY310
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine inst
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Welcome

        In this experiment, you will see words in different colors. Ignore the word itself. Press the key 'r' if the letter is red, 'b' if it is blue, 'p' if it is pink, and 'k' if it is yellow. Respond as quickly as you can.

        Press the 'space' key to start the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent target
      color [set every repeat] = $color
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $word 
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'r', 'b', 'p', 'k'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.0
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  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for participating in the experiment. 
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Flow
  Routine inst
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = emotionstrooptaskconditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'word': 'RED', 'color': 'red', 'condition': 'Congruent', 'correctresponsekey': 'r'},
      {'word': 'GREEN', 'color': 'blue', 'condition': 'Incongruent', 'correctresponsekey': 'b'},
      {'word': 'YELLOW', 'color': 'pink', 'condition': 'Congruent', 'correctresponsekey': 'p'},
      {'word': 'PINK', 'color': 'yellow', 'condition': 'Incongruent', 'correctresponsekey': 'k'},
      {'word': 'LOVE', 'color': 'red', 'condition': 'Congruent', 'correctresponsekey': 'r'},
      {'word': 'LIKE', 'color': 'blue', 'condition': 'Congruent', 'correctresponsekey': 'b'},
      {'word': 'HATE', 'color': 'pink', 'condition': 'Congruent', 'correctresponsekey': 'p'},
      {'word': 'CHANGE', 'color': 'yellow', 'condition': 'Incongruent', 'correctresponsekey': 'k'},
      {'word': 'ANGER', 'color': 'red', 'condition': 'Congruent', 'correctresponsekey': 'r'},
      {'word': 'SAD', 'color': 'blue', 'condition': 'Congruent', 'correctresponsekey': 'b'},
      {'word': 'GLOOMY', 'color': 'pink', 'condition': 'Congruent', 'correctresponsekey': 'p'},
      {'word': 'HAPPY', 'color': 'yellow', 'condition': 'Congruent', 'correctresponsekey': 'k'},
      {'word': 'CHAIR', 'color': 'red', 'condition': 'Incongruent', 'correctresponsekey': 'r'},
      {'word': 'DISSAPPOINTED', 'color': 'blue', 'condition': 'Conguent', 'correctresponsekey': 'b'},
      {'word': 'TABLE', 'color': 'pink', 'condition': 'Incongruent', 'correctresponsekey': 'p'},
      {'word': 'SPOON', 'color': 'yellow', 'condition': 'Incongruent', 'correctresponsekey': 'k'},
      {'word': 'FORK', 'color': 'red', 'condition': 'Incongruent', 'correctresponsekey': 'r'}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
    Routine trial
  LoopTerminator trials
  Routine end
